opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: dosing_hit_plate_prep_serial_dils_v6
author: Evan Tjeerdema, Rachel Metry - SIO
description: makes n = 8 plates. Each plate is preloaded with 2 compounds (3 wells/ compound), and 2 wells of vinblastine. final volume in wells (except for col 10-12) is 7.5uL volume. Load volume to sample wells is (column 1) is 15ul. Load volume of DMSO (columns 11, 12) is 60ul.
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p300_multi_gen2: {mount: left}
  p20_multi_gen2: {mount: right}
labware:
  DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1): {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 3}
  Opentrons OT-2 96 Filter Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 1}
  DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt: {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 2}
  DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt: {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 11}
  DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt: {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 10}
  DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt: {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 5}
  DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt: {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 7}
  DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt: {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 6}
  DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt: {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 8}
  Opentrons OT-2 96 Filter Tip Rack 20 µL (1): {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 4}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
  p20_multi_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
ingredients:
  - DMSO
  - moore_stock_10mM
  - vinblastine_10mM
  - vinblastine_5mM
  - MOHL_1_10mM
  - MOHL_2_10mM
  - vinblastine_125mM
ingredLocations:
  DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1):
    MOHL_1_10mM {volume: 15}: A1-C1
    MOHL_2_10mM {volume: 15}: D1-F1
    vinblastine_5mM {volume: 15}: G1, H1
    DMSO {volume: 60}: A11-H11, A12-H12
  DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt:
    MOHL_1_10mM {volume: 15}: A1-C1
    MOHL_2_10mM {volume: 15}: D1-F1
    vinblastine_5mM {volume: 15}: G1, H1
    DMSO {volume: 60}: A11-H11, A12-H12
  DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt:
    MOHL_1_10mM {volume: 15}: A1-C1
    MOHL_2_10mM {volume: 15}: D1-F1
    vinblastine_5mM {volume: 15}: G1, H1
    DMSO {volume: 60}: A11-H11, A12-H12
  DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt:
    MOHL_1_10mM {volume: 15}: A1-C1
    MOHL_2_10mM {volume: 15}: D1-F1
    vinblastine_5mM {volume: 15}: G1, H1
    DMSO {volume: 60}: A11-H11, A12-H12
  DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt:
    MOHL_1_10mM {volume: 15}: A1-C1
    MOHL_2_10mM {volume: 15}: D1-F1
    vinblastine_5mM {volume: 15}: G1, H1
    DMSO {volume: 60}: A11-H11, A12-H12
  DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt:
    MOHL_1_10mM {volume: 15}: A1-C1
    MOHL_2_10mM {volume: 15}: D1-F1
    vinblastine_5mM {volume: 15}: G1, H1
    DMSO {volume: 60}: A11-H11, A12-H12
  DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt:
    MOHL_1_10mM {volume: 15}: A1-C1
    MOHL_2_10mM {volume: 15}: D1-F1
    vinblastine_5mM {volume: 15}: G1, H1
    DMSO {volume: 60}: A11-H11, A12-H12
  DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt:
    MOHL_1_10mM {volume: 15}: A1-C1
    MOHL_2_10mM {volume: 15}: D1-F1
    vinblastine_5mM {volume: 15}: G1, H1
    DMSO {volume: 60}: A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: DMSO-Col11_Col2-6
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1)
  aspirate_wells: A11
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1)
  dispense_wells: A2-A6
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DMSO_col12_col7-10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: never
  aspirate_labware: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1)
  aspirate_wells: A12
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1)
  dispense_wells: A7-A10
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DHP1_Serial
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1)
  aspirate_wells: A1-A9
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  aspirate_flowRate: 15
  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1)
  dispense_wells: A2-A10
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: mix
  stepName: Mix_col10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  times: 5
  changeTip: never
  labware: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1)
  wells: A10
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: pause
  stepName: Plate Exchange
  pauseAction: untilResume
  pauseMessage: Plate complete. Please seal completed plate (add barcode and log into spreadsheet and add label). 
    
    have a wonderful day :)
- stepType: moveLiquid
  stepName: DMSO-Col11_Col2-6
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A11
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A6
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DMSO_col12_col7-10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: never
  aspirate_labware: DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A12
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A7-A10
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DHP2_Serial
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A9
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  aspirate_flowRate: 15
  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A10
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: mix
  stepName: Mix_col10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  times: 5
  changeTip: never
  labware: DHP-2_NEST 96 Well Plate 100 µL PCR Full Skirt
  wells: A10
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: pause
  stepName: Plate Exchange
  pauseAction: untilResume
  pauseMessage: Plate complete. Please seal completed plate (add barcode and log into spreadsheet and add label). 
    
    have a wonderful day :)
- stepType: moveLiquid
  stepName: DMSO-Col11_Col2-6
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A11
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A6
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DMSO_col12_col7-10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: never
  aspirate_labware: DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A12
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A7-A10
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DHP3_Serial
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A9
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  aspirate_flowRate: 15
  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A10
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: mix
  stepName: Mix_col10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  times: 5
  changeTip: never
  labware: DHP-3_NEST 96 Well Plate 100 µL PCR Full Skirt
  wells: A10
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: pause
  stepName: Plate Exchange
  pauseAction: untilResume
  pauseMessage: Plate complete. Please seal completed plate (add barcode and log into spreadsheet and add label). 
    
    have a wonderful day :)
- stepType: moveLiquid
  stepName: DMSO-Col11_Col2-6
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A11
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A6
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DMSO_col12_col7-10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: never
  aspirate_labware: DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A12
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A7-A10
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DHP4_Serial
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A9
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  aspirate_flowRate: 15
  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A10
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: mix
  stepName: Mix_col10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  times: 5
  changeTip: never
  labware: DHP-4_NEST 96 Well Plate 100 µL PCR Full Skirt
  wells: A10
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: pause
  stepName: Plate Exchange
  pauseAction: untilResume
  pauseMessage: Plate complete. Please seal completed plate (add barcode and log into spreadsheet and add label). 
    
    have a wonderful day :)
- stepType: moveLiquid
  stepName: DMSO-Col11_Col2-6
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A11
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.4
  dispense_labware: DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A6
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DMSO_col12_col7-10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: never
  aspirate_labware: DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A12
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A7-A10
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DHP5_Serial
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A9
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  aspirate_flowRate: 15
  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A10
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: mix
  stepName: Mix_col10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  times: 5
  changeTip: never
  labware: DHP-5_NEST 96 Well Plate 100 µL PCR Full Skirt
  wells: A10
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: pause
  stepName: Plate Exchange
  pauseAction: untilResume
  pauseMessage: Plate complete. Please seal completed plate (add barcode and log into spreadsheet and add label). 
    
    have a wonderful day :)
- stepType: moveLiquid
  stepName: DMSO-Col11_Col2-6
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A11
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A6
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DMSO_col12_col7-10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: never
  aspirate_labware: DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A12
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A7-A10
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DHP6_Serial
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A9
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  aspirate_flowRate: 15
  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A10
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: mix
  stepName: Mix_col10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  times: 5
  changeTip: never
  labware: DHP-6_NEST 96 Well Plate 100 µL PCR Full Skirt
  wells: A10
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1
  dropTip_location: trashBin
- stepType: pause
  stepName: Plate Exchange
  pauseAction: untilResume
  pauseMessage: Plate complete. Please seal completed plate (add barcode and log into spreadsheet and add label). 
    
    have a wonderful day :)
- stepType: moveLiquid
  stepName: DMSO-Col11_Col2-6
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A11
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A6
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DMSO_col12_col7-10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: never
  aspirate_labware: DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A12
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A7-A10
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DHP7_Serial
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A9
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  aspirate_flowRate: 15
  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A10
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: mix
  stepName: Mix_col10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  times: 5
  changeTip: never
  labware: DHP-7_NEST 96 Well Plate 100 µL PCR Full Skirt
  wells: A10
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: pause
  stepName: Plate Exchange
  pauseAction: untilResume
  pauseMessage: Plate complete. Please seal completed plate (add barcode and log into spreadsheet and add label). 
    
    have a wonderful day :)
- stepType: moveLiquid
  stepName: DMSO-Col11_Col2-6
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A11
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_mmFromBottom: 1.3
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A6
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DMSO_col12_col7-10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: never
  aspirate_labware: DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A12
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 5
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  aspirate_flowRate: 5
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 13.5
  dispense_labware: DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A7-A10
  dispense_flowRate: 7.6
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: DHP8_Serial
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7.5
  path: single
  changeTip: once
  aspirate_labware: DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A9
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  aspirate_flowRate: 15
  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1.5
  dispense_labware: DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A2-A10
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dropTip_location: trashBin
- stepType: mix
  stepName: Mix_col10
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 10
  times: 5
  changeTip: never
  labware: DHP-8_NEST 96 Well Plate 100 µL PCR Full Skirt
  wells: A10
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  aspirate_flowRate: 15
  dispense_flowRate: 15
  mix_mmFromBottom: 1.5
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_multi_gen2, labwareId: Opentrons OT-2 96 Filter Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_multi_gen2, volume: 7.5, labwareId: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1), wellName: A11, wellLocation: {origin: bottom, offset: {z: 1.3, x: 0, y: 0}}, flowRate: 5}
- touchTip: {pipetteId: p20_multi_gen2, labwareId: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1), wellName: A11, wellLocation: {origin: bottom, offset: {z: 13.5}}}
- moveToWell: {pipetteId: p20_multi_gen2, labwareId: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1), wellName: A11, wellLocation: {origin: bottom, offset: {z: 15.78, x: 0, y: 0}}}
- airGapInPlace: {flowRate: 5, pipetteId: p20_multi_gen2, volume: 5}
- dispense: {meta: {isAirGap: true}, pipetteId: p20_multi_gen2, volume: 5, labwareId: DHP-1_NEST 96 Well Plate 100 µL PCR Full Skirt (1), wellName: A2, wellLocation: {origin: bottom, offset: {z: 15.78, x: 0, y: 0}}, flowRate: 7.6}
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