opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: toxicant_library_dosing_LV_consumable_v14
author: Evan Tjeerdema, Rachel Metry - SIO
description: Dose embryos from library plate with  <50 ul per well. Use intermediate plate to dilute DMSO stock into FSW before applying to embryos. Dose embryos with 50ul of 4X compound in FSW intermediate. added pause
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p20_multi_gen2: {mount: right}
  p300_multi_gen2: {mount: left}
labware:
  NEST 12 Well Reservoir 15 mL: {labwareDefURI: opentrons/nest_12_reservoir_15ml/1, location: 6}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {labwareDefURI: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/2, location: 4}
  Corning 96 Well Plate 360 µL Flat: {labwareDefURI: opentrons/corning_96_wellplate_360ul_flat/2, location: 2}
  rename_Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt: {labwareDefURI: opentrons/opentrons_96_wellplate_200ul_pcr_full_skirt/2, location: 5}
  Opentrons OT-2 96 Tip Rack 300 µL (2): {labwareDefURI: opentrons/opentrons_96_tiprack_300ul/1, location: 7}
  Opentrons OT-2 96 Filter Tip Rack 20 µL (2): {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 8}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p20_multi_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - FSW
  - DMSO
  - FSW+EMBRYOS
  - TOXICANT - variable volume: {description: SEE LIBRARY KEY FOR COMPOUND NAMES, CONCENTRATION, AND SOLVENTS. }
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    FSW {volume: 15000}: A1
  NEST 96 Well Plate 100 µL PCR Full Skirt:
    TOXICANT - variable volume {volume: 10}: H1, G1, F1, D1, E1, C1, A1, B1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10
    DMSO {volume: 50}: A11-H11
  Corning 96 Well Plate 360 µL Flat:
    FSW+EMBRYOS {volume: 150}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: FSW_consumable
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 73.5
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  aspirate_flowRate: 50
  aspirate_mmFromBottom: 10
  dispense_labware: rename_Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A1-A11
  dispense_flowRate: 94
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_flowRate: 94
  blowout_location: source_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Library_consumeable
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1.5
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A11
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  aspirate_flowRate: 7.6
  aspirate_mmFromBottom: 0.4
  dispense_labware: rename_Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  dispense_wells: A1-A11
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dispense_mmFromBottom: 3.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 13.5
  blowout_checkbox: true
  blowout_flowRate: 7.6
  blowout_location: dest_well
  blowout_z_offset: -1
  dropTip_location: trashBin
- stepType: pause
  stepName: Consumable Plate Complete 
  stepDetails: Please hit run when the embryo dosing plate is on the stand
  pauseAction: untilResume
  pauseMessage: Resume when ready to dose the embryo plate at 30 mpf. 
    
    Remove, seal, and freeze the stock library plate. 
- stepType: moveLiquid
  stepName: consumable_embryos
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: rename_Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  aspirate_wells: A1-A10
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  aspirate_flowRate: 30
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 50
  aspirate_mmFromBottom: 3
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A1-A10
  dispense_flowRate: 30
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 2
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 9.5
  blowout_checkbox: true
  blowout_flowRate: 50
  blowout_location: dest_well
  blowout_z_offset: -2
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: FSW embryo top
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  aspirate_flowRate: 30
  aspirate_mmFromBottom: 5
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A12
  dispense_flowRate: 30
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 2
  blowout_checkbox: true
  blowout_flowRate: 50
  blowout_location: dest_well
  blowout_z_offset: -2
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: Consumable_embryos_DMSO
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 50
  path: single
  changeTip: never
  aspirate_labware: rename_Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt
  aspirate_wells: A11
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  aspirate_flowRate: 30
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 50
  aspirate_mmFromBottom: 3
  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A11
  dispense_flowRate: 30
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 2
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 9.5
  blowout_checkbox: true
  blowout_flowRate: 50
  blowout_location: dest_well
  blowout_z_offset: -2
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons OT-2 96 Tip Rack 300 µL (2), wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 240.5, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 10, x: 0, y: 0}}, flowRate: 50}
- dispense: {pipetteId: p300_multi_gen2, volume: 73.5, labwareId: rename_Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 73.5, labwareId: rename_Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 73.5, labwareId: rename_Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt, wellName: A3, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
- blowout: {pipetteId: p300_multi_gen2, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, flowRate: 94, wellLocation: {origin: top, offset: {z: 0}}}
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